---
API: 2.1
OpenSesame: 3.2.8
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title ExpLing2019_Pilot_E
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Volumes/NO NAME"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background white

define form_text_display block2_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render yes
	set margins "50;50;50;50"
	set form_title "중간 설명"
	__form_text__
	1부가 끝났습니다. 실험의 절반정도가 진행되었습니다.
	
	2부에 대한 설명입니다. 
	헤드폰을 계속 쓰신 상태로 주의를 기울여 소리를 들으시고 'ㅂ'로 시작하는 단어를 들으셨는지 'ㅍ'로 시작하는 단어를 들으셨는지 판단해 주시기 바랍니다. 'ㅂ'로 시작하는 단어를 들으셨으면 1을, 'ㅍ'로 시작하는 단어를 들으셨으면 0을 눌러 주시기 바랍니다.
	
	실험을 계속 진행하시려면 양 검지를 키보드 위 쪽 1과 0키에 각각 올려주시고 엄지로 스페이스바를 눌러주시기 바랍니다.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"


define loop block_F_td
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 28
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 F0 1
	setcycle 0 base_word domang
	setcycle 0 speaker F1
	setcycle 0 stop_type td
	setcycle 0 word_choice1 도망
	setcycle 0 word_choice0 토망
	setcycle 0 word_choice1_eng domang
	setcycle 0 word_choice0_eng tomang
	setcycle 1 F0 2
	setcycle 1 base_word domang
	setcycle 1 speaker F1
	setcycle 1 stop_type td
	setcycle 1 word_choice1 도망
	setcycle 1 word_choice0 토망
	setcycle 1 word_choice1_eng domang
	setcycle 1 word_choice0_eng tomang
	setcycle 2 F0 3
	setcycle 2 base_word domang
	setcycle 2 speaker F1
	setcycle 2 stop_type td
	setcycle 2 word_choice1 도망
	setcycle 2 word_choice0 토망
	setcycle 2 word_choice1_eng domang
	setcycle 2 word_choice0_eng tomang
	setcycle 3 F0 4
	setcycle 3 base_word domang
	setcycle 3 speaker F1
	setcycle 3 stop_type td
	setcycle 3 word_choice1 도망
	setcycle 3 word_choice0 토망
	setcycle 3 word_choice1_eng domang
	setcycle 3 word_choice0_eng tomang
	setcycle 4 F0 5
	setcycle 4 base_word domang
	setcycle 4 speaker F1
	setcycle 4 stop_type td
	setcycle 4 word_choice1 도망
	setcycle 4 word_choice0 토망
	setcycle 4 word_choice1_eng domang
	setcycle 4 word_choice0_eng tomang
	setcycle 5 F0 6
	setcycle 5 base_word domang
	setcycle 5 speaker F1
	setcycle 5 stop_type td
	setcycle 5 word_choice1 도망
	setcycle 5 word_choice0 토망
	setcycle 5 word_choice1_eng domang
	setcycle 5 word_choice0_eng tomang
	setcycle 6 F0 7
	setcycle 6 base_word domang
	setcycle 6 speaker F1
	setcycle 6 stop_type td
	setcycle 6 word_choice1 도망
	setcycle 6 word_choice0 토망
	setcycle 6 word_choice1_eng domang
	setcycle 6 word_choice0_eng tomang
	setcycle 7 F0 1
	setcycle 7 base_word tomang
	setcycle 7 speaker F1
	setcycle 7 stop_type td
	setcycle 7 word_choice1 도망
	setcycle 7 word_choice0 토망
	setcycle 7 word_choice1_eng domang
	setcycle 7 word_choice0_eng tomang
	setcycle 8 F0 2
	setcycle 8 base_word tomang
	setcycle 8 speaker F1
	setcycle 8 stop_type td
	setcycle 8 word_choice1 도망
	setcycle 8 word_choice0 토망
	setcycle 8 word_choice1_eng domang
	setcycle 8 word_choice0_eng tomang
	setcycle 9 F0 3
	setcycle 9 base_word tomang
	setcycle 9 speaker F1
	setcycle 9 stop_type td
	setcycle 9 word_choice1 도망
	setcycle 9 word_choice0 토망
	setcycle 9 word_choice1_eng domang
	setcycle 9 word_choice0_eng tomang
	setcycle 10 F0 4
	setcycle 10 base_word tomang
	setcycle 10 speaker F1
	setcycle 10 stop_type td
	setcycle 10 word_choice1 도망
	setcycle 10 word_choice0 토망
	setcycle 10 word_choice1_eng domang
	setcycle 10 word_choice0_eng tomang
	setcycle 11 F0 5
	setcycle 11 base_word tomang
	setcycle 11 speaker F1
	setcycle 11 stop_type td
	setcycle 11 word_choice1 도망
	setcycle 11 word_choice0 토망
	setcycle 11 word_choice1_eng domang
	setcycle 11 word_choice0_eng tomang
	setcycle 12 F0 6
	setcycle 12 base_word tomang
	setcycle 12 speaker F1
	setcycle 12 stop_type td
	setcycle 12 word_choice1 도망
	setcycle 12 word_choice0 토망
	setcycle 12 word_choice1_eng domang
	setcycle 12 word_choice0_eng tomang
	setcycle 13 F0 7
	setcycle 13 base_word tomang
	setcycle 13 speaker F1
	setcycle 13 stop_type td
	setcycle 13 word_choice1 도망
	setcycle 13 word_choice0 토망
	setcycle 13 word_choice1_eng domang
	setcycle 13 word_choice0_eng tomang
	setcycle 14 F0 1
	setcycle 14 base_word dongmil
	setcycle 14 speaker F1
	setcycle 14 stop_type td
	setcycle 14 word_choice1 동밀
	setcycle 14 word_choice0 통밀
	setcycle 14 word_choice1_eng dongmil
	setcycle 14 word_choice0_eng tongmil
	setcycle 15 F0 2
	setcycle 15 base_word dongmil
	setcycle 15 speaker F1
	setcycle 15 stop_type td
	setcycle 15 word_choice1 동밀
	setcycle 15 word_choice0 통밀
	setcycle 15 word_choice1_eng dongmil
	setcycle 15 word_choice0_eng tongmil
	setcycle 16 F0 3
	setcycle 16 base_word dongmil
	setcycle 16 speaker F1
	setcycle 16 stop_type td
	setcycle 16 word_choice1 동밀
	setcycle 16 word_choice0 통밀
	setcycle 16 word_choice1_eng dongmil
	setcycle 16 word_choice0_eng tongmil
	setcycle 17 F0 4
	setcycle 17 base_word dongmil
	setcycle 17 speaker F1
	setcycle 17 stop_type td
	setcycle 17 word_choice1 동밀
	setcycle 17 word_choice0 통밀
	setcycle 17 word_choice1_eng dongmil
	setcycle 17 word_choice0_eng tongmil
	setcycle 18 F0 5
	setcycle 18 base_word dongmil
	setcycle 18 speaker F1
	setcycle 18 stop_type td
	setcycle 18 word_choice1 동밀
	setcycle 18 word_choice0 통밀
	setcycle 18 word_choice1_eng dongmil
	setcycle 18 word_choice0_eng tongmil
	setcycle 19 F0 6
	setcycle 19 base_word dongmil
	setcycle 19 speaker F1
	setcycle 19 stop_type td
	setcycle 19 word_choice1 동밀
	setcycle 19 word_choice0 통밀
	setcycle 19 word_choice1_eng dongmil
	setcycle 19 word_choice0_eng tongmil
	setcycle 20 F0 7
	setcycle 20 base_word dongmil
	setcycle 20 speaker F1
	setcycle 20 stop_type td
	setcycle 20 word_choice1 동밀
	setcycle 20 word_choice0 통밀
	setcycle 20 word_choice1_eng dongmil
	setcycle 20 word_choice0_eng tongmil
	setcycle 21 F0 1
	setcycle 21 base_word tongmil
	setcycle 21 speaker F1
	setcycle 21 stop_type td
	setcycle 21 word_choice1 동밀
	setcycle 21 word_choice0 통밀
	setcycle 21 word_choice1_eng dongmil
	setcycle 21 word_choice0_eng tongmil
	setcycle 22 F0 2
	setcycle 22 base_word tongmil
	setcycle 22 speaker F1
	setcycle 22 stop_type td
	setcycle 22 word_choice1 동밀
	setcycle 22 word_choice0 통밀
	setcycle 22 word_choice1_eng dongmil
	setcycle 22 word_choice0_eng tongmil
	setcycle 23 F0 3
	setcycle 23 base_word tongmil
	setcycle 23 speaker F1
	setcycle 23 stop_type td
	setcycle 23 word_choice1 동밀
	setcycle 23 word_choice0 통밀
	setcycle 23 word_choice1_eng dongmil
	setcycle 23 word_choice0_eng tongmil
	setcycle 24 F0 4
	setcycle 24 base_word tongmil
	setcycle 24 speaker F1
	setcycle 24 stop_type td
	setcycle 24 word_choice1 동밀
	setcycle 24 word_choice0 통밀
	setcycle 24 word_choice1_eng dongmil
	setcycle 24 word_choice0_eng tongmil
	setcycle 25 F0 5
	setcycle 25 base_word tongmil
	setcycle 25 speaker F1
	setcycle 25 stop_type td
	setcycle 25 word_choice1 동밀
	setcycle 25 word_choice0 통밀
	setcycle 25 word_choice1_eng dongmil
	setcycle 25 word_choice0_eng tongmil
	setcycle 26 F0 6
	setcycle 26 base_word tongmil
	setcycle 26 speaker F1
	setcycle 26 stop_type td
	setcycle 26 word_choice1 동밀
	setcycle 26 word_choice0 통밀
	setcycle 26 word_choice1_eng dongmil
	setcycle 26 word_choice0_eng tongmil
	setcycle 27 F0 7
	setcycle 27 base_word tongmil
	setcycle 27 speaker F1
	setcycle 27 stop_type td
	setcycle 27 word_choice1 동밀
	setcycle 27 word_choice0 통밀
	setcycle 27 word_choice1_eng dongmil
	setcycle 27 word_choice0_eng tongmil
	run sequence_F_td

define loop block_M_pb
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 28
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 F0 1
	setcycle 0 base_word bama
	setcycle 0 speaker M1
	setcycle 0 stop_type pb
	setcycle 0 word_choice0 파마
	setcycle 0 word_choice1 바마
	setcycle 0 word_choice0_eng pama
	setcycle 0 word_choice1_eng bama
	setcycle 1 F0 2
	setcycle 1 base_word bama
	setcycle 1 speaker M1
	setcycle 1 stop_type pb
	setcycle 1 word_choice0 파마
	setcycle 1 word_choice1 바마
	setcycle 1 word_choice0_eng pama
	setcycle 1 word_choice1_eng bama
	setcycle 2 F0 3
	setcycle 2 base_word bama
	setcycle 2 speaker M1
	setcycle 2 stop_type pb
	setcycle 2 word_choice0 파마
	setcycle 2 word_choice1 바마
	setcycle 2 word_choice0_eng pama
	setcycle 2 word_choice1_eng bama
	setcycle 3 F0 4
	setcycle 3 base_word bama
	setcycle 3 speaker M1
	setcycle 3 stop_type pb
	setcycle 3 word_choice0 파마
	setcycle 3 word_choice1 바마
	setcycle 3 word_choice0_eng pama
	setcycle 3 word_choice1_eng bama
	setcycle 4 F0 5
	setcycle 4 base_word bama
	setcycle 4 speaker M1
	setcycle 4 stop_type pb
	setcycle 4 word_choice0 파마
	setcycle 4 word_choice1 바마
	setcycle 4 word_choice0_eng pama
	setcycle 4 word_choice1_eng bama
	setcycle 5 F0 6
	setcycle 5 base_word bama
	setcycle 5 speaker M1
	setcycle 5 stop_type pb
	setcycle 5 word_choice0 파마
	setcycle 5 word_choice1 바마
	setcycle 5 word_choice0_eng pama
	setcycle 5 word_choice1_eng bama
	setcycle 6 F0 7
	setcycle 6 base_word bama
	setcycle 6 speaker M1
	setcycle 6 stop_type pb
	setcycle 6 word_choice0 파마
	setcycle 6 word_choice1 바마
	setcycle 6 word_choice0_eng pama
	setcycle 6 word_choice1_eng bama
	setcycle 7 F0 1
	setcycle 7 base_word pama
	setcycle 7 speaker M1
	setcycle 7 stop_type pb
	setcycle 7 word_choice0 파마
	setcycle 7 word_choice1 바마
	setcycle 7 word_choice0_eng pama
	setcycle 7 word_choice1_eng bama
	setcycle 8 F0 2
	setcycle 8 base_word pama
	setcycle 8 speaker M1
	setcycle 8 stop_type pb
	setcycle 8 word_choice0 파마
	setcycle 8 word_choice1 바마
	setcycle 8 word_choice0_eng pama
	setcycle 8 word_choice1_eng bama
	setcycle 9 F0 3
	setcycle 9 base_word pama
	setcycle 9 speaker M1
	setcycle 9 stop_type pb
	setcycle 9 word_choice0 파마
	setcycle 9 word_choice1 바마
	setcycle 9 word_choice0_eng pama
	setcycle 9 word_choice1_eng bama
	setcycle 10 F0 4
	setcycle 10 base_word pama
	setcycle 10 speaker M1
	setcycle 10 stop_type pb
	setcycle 10 word_choice0 파마
	setcycle 10 word_choice1 바마
	setcycle 10 word_choice0_eng pama
	setcycle 10 word_choice1_eng bama
	setcycle 11 F0 5
	setcycle 11 base_word pama
	setcycle 11 speaker M1
	setcycle 11 stop_type pb
	setcycle 11 word_choice0 파마
	setcycle 11 word_choice1 바마
	setcycle 11 word_choice0_eng pama
	setcycle 11 word_choice1_eng bama
	setcycle 12 F0 6
	setcycle 12 base_word pama
	setcycle 12 speaker M1
	setcycle 12 stop_type pb
	setcycle 12 word_choice0 파마
	setcycle 12 word_choice1 바마
	setcycle 12 word_choice0_eng pama
	setcycle 12 word_choice1_eng bama
	setcycle 13 F0 7
	setcycle 13 base_word pama
	setcycle 13 speaker M1
	setcycle 13 stop_type pb
	setcycle 13 word_choice0 파마
	setcycle 13 word_choice1 바마
	setcycle 13 word_choice0_eng pama
	setcycle 13 word_choice1_eng bama
	setcycle 14 F0 1
	setcycle 14 base_word baneul
	setcycle 14 speaker M1
	setcycle 14 stop_type pb
	setcycle 14 word_choice0 파늘
	setcycle 14 word_choice1 바늘
	setcycle 14 word_choice0_eng paneul
	setcycle 14 word_choice1_eng baneul
	setcycle 15 F0 2
	setcycle 15 base_word baneul
	setcycle 15 speaker M1
	setcycle 15 stop_type pb
	setcycle 15 word_choice0 파늘
	setcycle 15 word_choice1 바늘
	setcycle 15 word_choice0_eng paneul
	setcycle 15 word_choice1_eng baneul
	setcycle 16 F0 3
	setcycle 16 base_word baneul
	setcycle 16 speaker M1
	setcycle 16 stop_type pb
	setcycle 16 word_choice0 파늘
	setcycle 16 word_choice1 바늘
	setcycle 16 word_choice0_eng paneul
	setcycle 16 word_choice1_eng baneul
	setcycle 17 F0 4
	setcycle 17 base_word baneul
	setcycle 17 speaker M1
	setcycle 17 stop_type pb
	setcycle 17 word_choice0 파늘
	setcycle 17 word_choice1 바늘
	setcycle 17 word_choice0_eng paneul
	setcycle 17 word_choice1_eng baneul
	setcycle 18 F0 5
	setcycle 18 base_word baneul
	setcycle 18 speaker M1
	setcycle 18 stop_type pb
	setcycle 18 word_choice0 파늘
	setcycle 18 word_choice1 바늘
	setcycle 18 word_choice0_eng paneul
	setcycle 18 word_choice1_eng baneul
	setcycle 19 F0 6
	setcycle 19 base_word baneul
	setcycle 19 speaker M1
	setcycle 19 stop_type pb
	setcycle 19 word_choice0 파늘
	setcycle 19 word_choice1 바늘
	setcycle 19 word_choice0_eng paneul
	setcycle 19 word_choice1_eng baneul
	setcycle 20 F0 7
	setcycle 20 base_word baneul
	setcycle 20 speaker M1
	setcycle 20 stop_type pb
	setcycle 20 word_choice0 파늘
	setcycle 20 word_choice1 바늘
	setcycle 20 word_choice0_eng paneul
	setcycle 20 word_choice1_eng baneul
	setcycle 21 F0 1
	setcycle 21 base_word paneul
	setcycle 21 speaker M1
	setcycle 21 stop_type pb
	setcycle 21 word_choice0 파늘
	setcycle 21 word_choice1 바늘
	setcycle 21 word_choice0_eng paneul
	setcycle 21 word_choice1_eng baneul
	setcycle 22 F0 2
	setcycle 22 base_word paneul
	setcycle 22 speaker M1
	setcycle 22 stop_type pb
	setcycle 22 word_choice0 파늘
	setcycle 22 word_choice1 바늘
	setcycle 22 word_choice0_eng paneul
	setcycle 22 word_choice1_eng baneul
	setcycle 23 F0 3
	setcycle 23 base_word paneul
	setcycle 23 speaker M1
	setcycle 23 stop_type pb
	setcycle 23 word_choice0 파늘
	setcycle 23 word_choice1 바늘
	setcycle 23 word_choice0_eng paneul
	setcycle 23 word_choice1_eng baneul
	setcycle 24 F0 4
	setcycle 24 base_word paneul
	setcycle 24 speaker M1
	setcycle 24 stop_type pb
	setcycle 24 word_choice0 파늘
	setcycle 24 word_choice1 바늘
	setcycle 24 word_choice0_eng paneul
	setcycle 24 word_choice1_eng baneul
	setcycle 25 F0 5
	setcycle 25 base_word paneul
	setcycle 25 speaker M1
	setcycle 25 stop_type pb
	setcycle 25 word_choice0 파늘
	setcycle 25 word_choice1 바늘
	setcycle 25 word_choice0_eng paneul
	setcycle 25 word_choice1_eng baneul
	setcycle 26 F0 6
	setcycle 26 base_word paneul
	setcycle 26 speaker M1
	setcycle 26 stop_type pb
	setcycle 26 word_choice0 파늘
	setcycle 26 word_choice1 바늘
	setcycle 26 word_choice0_eng paneul
	setcycle 26 word_choice1_eng baneul
	setcycle 27 F0 7
	setcycle 27 base_word paneul
	setcycle 27 speaker M1
	setcycle 27 stop_type pb
	setcycle 27 word_choice0 파늘
	setcycle 27 word_choice1 바늘
	setcycle 27 word_choice0_eng paneul
	setcycle 27 word_choice1_eng baneul
	run sequence_M_pb

define form_text_display end_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render yes
	set margins "50;50;50;50"
	set form_title 끝
	__form_text__
	실험이 끝났습니다. 
	참여해 주셔서 감사합니다.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"


define keyboard_response end_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response ENTER

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run start_instructions always
	run start_keyboard_response always
	run pause_focus_td always
	run block_F_td always
	run block2_instructions always
	run mid_keyboard_response always
	run pause_focus_pb always
	run block_M_pb always
	run end_instructions always
	run end_keyboard_response always

define keyboard_response mid_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response SPACE

define sketchpad pause_focus_pb
	set duration 800
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad pause_focus_td
	set duration 800
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sequence sequence_F_td
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_choices_td always
	run trial_stimuli_td always
	run trial_response_td always
	run trial_logger always
	run pause_focus_td always

define sequence sequence_M_pb
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_choices_pb always
	run trial_stimuli_pb always
	run trial_response_pb always
	run trial_logger always
	run pause_focus_pb always

define form_text_display start_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render yes
	set margins "50;50;50;50"
	set form_title 안내문
	__form_text__
	안녕하세요. 실험에 참여해 주셔서 감사합니다.
	이 실험을 통해 모아진 자료는 수업에서 교육 용도로만 사용되며 2019년 12월 이후 폐기됩니다. 
	실험에 참여하시다가 원하시면 언제든지 그만 두실 수 있으며 그만두신다고 해도 어떠한 불이익도 없습니다.
	실험은 총 15분정도 소요될 것으로 예상됩니다. 
	
	이 실험은 1부와 2부로 구성되어 있습니다.
	1부에 대한 설명입니다. 
	헤드폰을 쓰신 후 주의를 기울여 소리를 들으시고 'ㄷ'로 시작하는 단어를 들으셨는지 'ㅌ'로 시작하는 단어를 들으셨는지 판단해 주시기 바랍니다. 'ㄷ'로 시작하는 단어를 들으셨으면 1을, 'ㅌ'로 시작하는 단어를 들으셨으면 0을 눌러 주시기 바랍니다. 1과 0이 어느 답변에 대응하는지는 실험 하시는동안 화면으로도 계속 제시됩니다. 
	
	실험을 시작하시려면 양 검지를 키보드 위 쪽 1과 0키에 각각 올려주시고 엄지로 스페이스바를 눌러주시기 바랍니다.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"


define keyboard_response start_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response SPACE

define sketchpad trial_choices_pb
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[word_choice1]: 1" x=-288 y=192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[word_choice0]: 0" x=288 y=192 z_index=0

define sketchpad trial_choices_td
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[word_choice1]: 1" x=-288 y=192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[word_choice0]: 0" x=288 y=192 z_index=0

define logger trial_logger
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log count_trial_logger
	log speaker
	log stop_type
	log base_word
	log F0
	log response
	log response_time
	log time_experiment
	log word_choice0_eng
	log word_choice1_eng

define keyboard_response trial_response_pb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;0"

define keyboard_response trial_response_td
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;0"

define sampler trial_stimuli_pb
	set volume 1
	set stop_after 0
	set sample "[speaker]-[stop_type]-[base_word]-[F0].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler trial_stimuli_td
	set volume 1
	set stop_after 0
	set sample "[speaker]-[stop_type]-[base_word]-[F0].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

